PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'speedrun': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  color = $(-1.0000, -1.0000, -1.0000)
  consoleLoggingLevel = data
  expName = dynamind-01
  expVersion = 1.0.0
  frameRateMsg = Experiment wird vorbereitet...
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 1
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Routines
  Routine rr_setup
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    CodeComponent setup_constants
      Code Type = Py
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      Before Experiment:
        # IMPORT MODULES ----
        import random
        import math
        import numpy as np
        import sounddevice as sd
        import threading
        import pandas as pd
        from collections import deque
        import hashlib

        # IMPORT SUBMODULES ----
        # from scipy.stats import truncnorm, nur bei truncated normal distribution
        from psychopy.colors import Color
        from scipy.stats import norm
        from itertools import product
        from openpyxl import Workbook
        from openpyxl.styles import PatternFill
        import statistics
      Begin Experiment:
        # DEFINITIONS AND CONSTANTS ----
        NUM_MVC               = 2     # How many MVC trials to conduct
        NUM_BLOCKS            = 3     # How often each block within the domain is repeated
        NUM_LEVELS            = 4     # How often each level within the block is repeated
        NUM_PALETTES_EXERCISE = 12    # for practice trials
        NUM_PALETTES_REGULAR  = 24    # for main trials
        NUM_TARGETS           = 4     # How many targets appear in NUM_PALETTES palettes
        NUM_DISTRACTORS       = 8
        NON_TARGET_PALETTES   = [2, 2] # the first and last x palettes that never contain a target

        # MIN, MAX, AND RANGE OF COGNITIVE AND PHYSICAL DEMAND
        PHYSICAL_DEMAND_MIN     = 0.03
        PHYSICAL_DEMAND_MAX     = 0.40
        COGNITIVE_DEMAND_MIN    = 70
        COGNITIVE_DEMAND_MAX    = 10
        PHYSICAL_DEMAND_LEVELS  = np.round(np.linspace(PHYSICAL_DEMAND_MIN, PHYSICAL_DEMAND_MAX, NUM_LEVELS), 2).tolist()
        COGNITIVE_DEMAND_LEVELS = np.round(np.linspace(COGNITIVE_DEMAND_MIN, COGNITIVE_DEMAND_MAX, NUM_LEVELS), 2).tolist()

        # TOLERANCE = 15.0
        FORCE_TOLERANCE_K = 0.15  # tolerance = 15% of current target force
        FORCE_BUFFER_LENGTH = 10
        FORCE_TOLERANCE_BUFFER = deque(maxlen = FORCE_BUFFER_LENGTH)

        def force_nrmse(force_samples, target_force):
            """
            Normalized RMSE of force relative to target.
            Returns a percentage (e.g., 10% deviation from target).
            """
            force = np.asarray(force_samples)
            rmse  = np.sqrt(np.mean((force - target_force) ** 2))
            return round((rmse / target_force) * 100, 2)

        def force_bias(force_samples, target_force):
            """
            Mean signed deviation as a percentage of target.
            Positive = pressed too hard on average, negative = too soft.
            """
            force = np.asarray(force_samples)
            return round((np.mean(force - target_force) / target_force) * 100, 2)

        #def force_pct_in_range(force_samples, target_force, tolerance=TOLERANCE):
        #    """
        #    Percentage of samples within ±tolerance Newtons of target.
        #    """
        #    force = np.asarray(force_samples)
        #    lower = target_force - tolerance
        #    upper = target_force + tolerance
        #    return round(np.mean((force >= lower) & (force <= upper)) * 100, 2)

        def force_pct_in_range(force_samples, target_force, tolerance_k=FORCE_TOLERANCE_K):
            """
            Percentage of samples within ±k*target_force of target.
            """
            force = np.asarray(force_samples)
            if target_force <= 0:
                return np.nan
            lower = target_force * (1.0 - tolerance_k)
            upper = target_force * (1.0 + tolerance_k)
            return round(np.mean((force >= lower) & (force <= upper)) * 100, 2)

        # TARGET COLORS ----
        TARGET_COLORS_RGB255 = [[255, 0, 0], [0, 255, 0], [0, 0, 255]]
        COLOR_NAMES = {
            (255, 0, 0):   "Red",
            (0, 255, 0):   "Green",
            (0, 0, 255):   "Blue",
        }

        INNER_HOLES = list(range(8))
        OUTER_HOLES = list(range(9, 21))

        # TIMING CONSTANTS ----
        PALETTE_DURATION_SEC = 0.416
        COUNTDOWN_STEP_SEC = 0.5
        BLOCK_BREAK_DURATION = 4 * 60 # four minutes break per default

        # AUDIO CONSTANTS ----
        FS          = 48000
        CHANNELS    = 1
        FREQ_LOW    = 440.0
        FREQ_HIGH   = 880.0
        AMP_MAX     = 1.0
        AMP_SMOOTH  = 0.1
        STATE_HOLD  = 0.1

        # SPEEDRUN MODE ----
        speedrun = expInfo['speedrun']
        if speedrun:
            NUM_BLOCKS            = 1
            NUM_LEVELS            = 2
            NUM_PALETTES_EXERCISE = 5
            NUM_PALETTES_REGULAR  = 5
            NUM_TARGETS           = 1

            PHYSICAL_DEMAND_LEVELS  = np.round(np.linspace(PHYSICAL_DEMAND_MIN, PHYSICAL_DEMAND_MAX, NUM_LEVELS), 2).tolist()
            COGNITIVE_DEMAND_LEVELS = np.round(np.linspace(COGNITIVE_DEMAND_MIN, COGNITIVE_DEMAND_MAX, NUM_LEVELS), 2).tolist()

        # RANDOMNESS ----
        def seed_from_participant_id(pid):
            pid_text = str(pid).strip()
            if pid_text == "":
                pid_text = "EMPTY_PARTICIPANT_ID"
            digest = hashlib.sha256(pid_text.encode("utf-8")).digest()
            # use first 8 bytes, fold to uint32 for NumPy compatibility
            return int.from_bytes(digest[:8], byteorder="big", signed=False) % (2**32)

        # Global seed
        GLOBAL_SEED = seed_from_participant_id(expInfo['participant'])

        # Seed Python stdlib RNG (used by random.choice/sample/random/randint)
        random.seed(GLOBAL_SEED)

        # Seed NumPy legacy RNG (used by np.random and imported randint/shuffle/etc.)
        np.random.seed(GLOBAL_SEED)
    CodeComponent setup_color_utils
      Code Type = Py
      Before Experiment:
        def rgb_to_lab(rgb):
            """
            Convert color from RGB to CIELAB space.

            Parameters
            ----------
            rgb : tuple or list
                A tuple/list of three values representing the RGB color.
                Accepts either normalized (0-1) or rgb255 (0-255) format.
                Auto-detects format: if any value > 1, assumes 0-255 range.
            """
            # Auto-normalize if input is in 0-255 range
            if any(c > 1 for c in rgb):
                rgb = tuple(c / 255 for c in rgb)

            def pivot_rgb(c):
                return ((c + 0.055)/1.055)**2.4 if c > 0.04045 else c/12.92

            R, G, B = [pivot_rgb(v) for v in rgb]

            X = 0.4124564*R + 0.3575761*G + 0.1804375*B
            Y = 0.2126729*R + 0.7151522*G + 0.0721750*B
            Z = 0.0193339*R + 0.1191920*G + 0.9503041*B

            X /= 0.95047
            Z /= 1.08883

            def f(t):
                return t**(1/3) if t > 0.008856 else (7.787*t + 16/116)

            L = 116 * f(Y) - 16
            a = 500 * (f(X) - f(Y))
            b = 200 * (f(Y) - f(Z))

            return (L, a, b)

        def delta_e2000(lab1, lab2):
            """
            Calculate the Delta E 2000 color difference between two CIELAB colors.

            Parameters
            ----------
            lab1 : tuple
                A tuple of three floats representing the first CIELAB color (L, a, b).
            lab2 : tuple
                A tuple of three floats representing the second CIELAB color (L, a, b).
            """
            L1, a1, b1 = lab1
            L2, a2, b2 = lab2

            avg_L = (L1 + L2) / 2
            C1 = math.sqrt(a1*a1 + b1*b1)
            C2 = math.sqrt(a2*a2 + b2*b2)
            avg_C = (C1 + C2) / 2

            G = 0.5 * (1 - math.sqrt((avg_C**7)/((avg_C**7) + (25**7))))
            a1p = a1 * (1 + G)
            a2p = a2 * (1 + G)

            C1p = math.sqrt(a1p*a1p + b1*b1)
            C2p = math.sqrt(a2p*a2p + b2*b2)
            avg_Cp = (C1p + C2p) / 2

            h1p = (math.degrees(math.atan2(b1, a1p)) + 360) % 360
            h2p = (math.degrees(math.atan2(b2, a2p)) + 360) % 360

            dhp = h2p - h1p
            if abs(dhp) > 180:
                dhp -= 360 * math.copysign(1, dhp)
            dHp = 2 * math.sqrt(C1p*C2p) * math.sin(math.radians(dhp/2))

            avg_hp = (h1p + dhp/2) % 360

            T = 1 - 0.17*math.cos(math.radians(avg_hp - 30)) \
                  + 0.24*math.cos(math.radians(2*avg_hp)) \
                  + 0.32*math.cos(math.radians(3*avg_hp + 6)) \
                  - 0.20*math.cos(math.radians(4*avg_hp - 63))

            Sl = 1 + (0.015*((avg_L - 50)**2)) / math.sqrt(20 + (avg_L - 50)**2)
            Sc = 1 + 0.045 * avg_Cp
            Sh = 1 + 0.015 * avg_Cp * T

            Rt = -2 * math.sqrt((avg_Cp**7)/((avg_Cp**7)+(25**7))) * \
                 math.sin(math.radians(60 * math.exp(-(((avg_hp - 275)/25)**2))))

            dE = math.sqrt(
                (L2-L1)**2 / (Sl**2) +
                (C2p-C1p)**2 / (Sc**2) +
                (dHp)**2 / (Sh**2) +
                Rt * (C2p-C1p)/Sc * dHp/Sh
            )
            return dE

        def generate_distractors(target_rgb, deltaE_mid, n):
            """
            Generate n distractor colors that are approximately deltaE_mid away from target.

            Parameters
            ----------
            target_rgb : tuple/list
                RGB color in 0-1 (normalized) or 0-255 format (auto-detected).
            deltaE_mid : float
                Target Delta E 2000 distance from target color.
            n : int
                Number of distractor colors to generate.

            Returns
            -------
            list of lists
                Distractor colors in rgb255 format (0-255 ints).
            """
            target_lab = rgb_to_lab(target_rgb)
            distractors = []
            attempts = 0

            while len(distractors) < n and attempts < 50000:
                attempts += 1
                rgb = (random.random(), random.random(), random.random())
                lab = rgb_to_lab(rgb)
                dE = delta_e2000(target_lab, lab)

                if abs(dE - deltaE_mid) <= 1.5:
                    distractors.append([int(c * 255) for c in rgb])  # Convert to rgb255

            if len(distractors) < n:
                print("WARNUNG: nicht genug Farben im DeltaE-Band gefunden.")
                while len(distractors) < n:
                    distractors.append([int(c * 255) for c in (random.random(), random.random(), random.random())])

            return distractors
    CodeComponent setup_audio
      Code Type = Py
      Begin Experiment:
        global _state_lock, _target_freq, _target_amp, _cur_amp, _phase, _stream

        # Audio parameters
        FS          = 48000
        CHANNELS    = 1
        FREQ_LOW    = 440.0
        FREQ_HIGH   = 880.0
        AMP_MAX     = 1.0
        AMP_SMOOTH  = 0.1
        STATE_HOLD  = 0.1

        # Shared state
        _state_lock  = threading.Lock()
        _target_freq = FREQ_LOW
        _target_amp  = 0.0
        _cur_amp     = 0.0
        _phase       = 0.0

        def audio_callback(outdata, frames, time, status):
            global _phase, _cur_amp, _target_amp, _target_freq
            with _state_lock:
                tf = float(_target_freq)
                ta = float(_target_amp)
            _cur_amp  = (1.0 - AMP_SMOOTH) * _cur_amp + AMP_SMOOTH * ta
            t         = (np.arange(frames) / FS).astype(np.float32)
            phase_inc = 2.0 * np.pi * tf
            y         = np.sin(_phase + phase_inc * t).astype(np.float32)
            _phase    = float((_phase + phase_inc * (frames / FS)) % (2.0 * np.pi))
            outdata[:] = (_cur_amp * AMP_MAX * y).reshape(-1, 1)

        _stream = sd.OutputStream(
            samplerate = FS,
            channels   = CHANNELS,
            dtype      = "float32",
            callback   = audio_callback,
        )
        if not _stream.active:
            _stream.start()

        # Keep stream running, but force target signal to silence
        def mute_audio():
            global _target_amp, _target_freq
            with _state_lock:
                _target_amp = 0.0
                _target_freq = FREQ_LOW

        #def deviation_to_interval(deviation, min_dev = TOLERANCE, max_dev = TOLERANCE*2):
        #    """Maps deviation to beep interval in seconds. Outside range = no beep."""
        #    if deviation < min_dev:
        #        return None  # in zone, silent
        #    # clamp to max_dev, then map to interval range
        #    dev_clamped = min(deviation, max_dev)
        #    # linear map: 15N -> 1.0s interval, 30N -> 0.2s interval
        #    t = (dev_clamped - min_dev) / (max_dev - min_dev)  # 0.0 to 1.0
        #    return 1.0 - t * 0.8

        def deviation_to_interval(deviation, min_dev, max_dev):
            """Maps deviation to beep interval in seconds. Outside range = no beep."""
            if deviation < min_dev:
                return None
            dev_clamped = min(deviation, max_dev)
            t = (dev_clamped - min_dev) / (max_dev - min_dev)
            return 1.0 - t * 0.8
    CodeComponent setup_random
      Code Type = Py
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      Begin Experiment:
        # =============================================================================
        # PALETTE GENERATION
        # =============================================================================
        def generate_trial_palettes(target_color_rgb255, cognitive_demand_level,
                                     n_palettes, n_targets = NUM_TARGETS,
                                     n_holes = NUM_DISTRACTORS, non_target_palettes = NON_TARGET_PALETTES):
            """
            Generate all palettes for one trial.
            - n_targets palettes contain the target color at a random hole position
            - remaining palettes contain only distractors
            """
            available = n_palettes - sum(non_target_palettes)
            if available < n_targets:
                raise ValueError(
                    f"n_palettes={n_palettes} is too small to place {n_targets} target(s): "
                    f"only {available} eligible position(s) available (need at least {n_targets + non_target_palettes})."
                )

            # Never show target in the first or last two palettes
            target_palette_indices = set(random.sample(range(non_target_palettes[0], n_palettes - non_target_palettes[1]), n_targets))

            palettes = []
            for i in range(n_palettes):
                if i in target_palette_indices:
                    distractors = generate_distractors(target_color_rgb255, cognitive_demand_level, n=n_holes - 1)
                    target_pos  = random.randint(0, n_holes - 1)
                    palette     = distractors.copy()
                    palette.insert(target_pos, target_color_rgb255)
                else:
                    palette = generate_distractors(target_color_rgb255, cognitive_demand_level, n=n_holes)
                palettes.append(palette)

            return palettes

        # =============================================================================
        # CREATE TRIALS
        # =============================================================================
        def make_trial(physical_demand_level, cognitive_demand_level, target_color_rgb255, phase, num_palettes):
            return {
                "physical_demand_level":  physical_demand_level,
                "cognitive_demand_level": cognitive_demand_level,
                "target_color_rgb255":    target_color_rgb255,
                "phase":                  phase,
                "num_palettes":           num_palettes
            }

        # Practice 1: Low cognitive and low physical demand
        practice_neutral = [
            make_trial(
                physical_demand_level  = PHYSICAL_DEMAND_MIN,
                cognitive_demand_level = COGNITIVE_DEMAND_MIN,
                target_color_rgb255    = random.choice(TARGET_COLORS_RGB255),
                phase                  = "practice_neutral",
                num_palettes           = NUM_PALETTES_EXERCISE
            )
        ]

        # Practice 2: Increasing cognitive and low physical demand
        practice_cognitive = [
            make_trial(
                physical_demand_level  = PHYSICAL_DEMAND_MIN,
                cognitive_demand_level = demand,
                target_color_rgb255    = random.choice(TARGET_COLORS_RGB255),
                phase                  = "practice_cognitive",
                num_palettes           = NUM_PALETTES_EXERCISE
            )
            for demand in COGNITIVE_DEMAND_LEVELS
        ]

        # Practice 3: Low cognitive and increasing physical demand
        practice_physical = [
            make_trial(
                physical_demand_level  = demand,
                cognitive_demand_level = COGNITIVE_DEMAND_MIN,
                target_color_rgb255    = random.choice(TARGET_COLORS_RGB255),
                phase                  = "practice_physical",
                num_palettes           = NUM_PALETTES_EXERCISE
            )
            for demand in PHYSICAL_DEMAND_LEVELS
        ]

        practice_blocks = [practice_neutral, practice_cognitive, practice_physical]

        # Main experiment blocks
        main_blocks = {b: [] for b in range(NUM_BLOCKS)}
        for physical_demand_level, cognitive_demand_level in product(PHYSICAL_DEMAND_LEVELS, COGNITIVE_DEMAND_LEVELS):
            for block, target_color_rgb255 in zip(main_blocks, random.sample(TARGET_COLORS_RGB255, 3)):
                main_blocks[block].append(
                    make_trial(
                        physical_demand_level  = physical_demand_level,
                        cognitive_demand_level = cognitive_demand_level,
                        target_color_rgb255    = target_color_rgb255,
                        phase                  = "main",
                        num_palettes           = NUM_PALETTES_REGULAR
                    )
                )

        for block in main_blocks.values():
            random.shuffle(block)

        # Randomized main blocks, practice blocks always come first
        main_block_order = list(main_blocks.keys())
        random.shuffle(main_block_order)

        # Final list of blocks
        blocks = []
        blocks.extend(practice_blocks)
        for b in main_block_order:
            blocks.append(main_blocks[b])

        # =============================================================================
        # CREATE PALETTES
        # =============================================================================
        for b, trials in enumerate(blocks):
            for trial in trials:
                n_palettes = NUM_PALETTES_EXERCISE if trial["phase"] != "main" else NUM_PALETTES_REGULAR
                palettes = generate_trial_palettes(
                    target_color_rgb255    = trial["target_color_rgb255"],
                    cognitive_demand_level = trial["cognitive_demand_level"],
                    n_palettes              = n_palettes
                )
                target = trial["target_color_rgb255"]
                target_palettes = [i for i, p in enumerate(palettes) if target in p]
                target_holes    = [p.index(target) for i, p in enumerate(palettes) if target in p]

                trial["palettes"]            = palettes
                trial["palette_has_target"]  = [target in p for p in palettes]
                trial["palette_target_hole"] = [p.index(target) if target in p else None for p in palettes]

        # =============================================================================
        # BALANCE CHECK
        # =============================================================================
        all_trials = []
        for b, trials in enumerate(blocks):
            for t in trials:
                all_trials.append({**{k: v for k, v in t.items() if k != "palettes"}, "block": b})
        df_check = pd.DataFrame(all_trials)
        df_check["color"] = df_check["target_color_rgb255"].apply(tuple)

        lines = ["=" * 50, "TRIAL BALANCE CHECK", "=" * 50]
        for factor in ["physical_demand_level", "cognitive_demand_level", "color"]:
            lines.append(f"\n--- {factor} ---")
            table = df_check.groupby(["block", factor]).size().unstack(fill_value=0)
            lines.append(table.to_string())
            lines.append(f"Totals: {df_check[factor].value_counts().sort_index().to_dict()}")
        lines.append("\nTotal trials per block:")
        lines.append(df_check.groupby("block").size().to_string())
        # print("\n".join(lines))

        # =============================================================================
        # BUILD LONG FORMAT ROWS
        # =============================================================================
        rows = []
        for b, trials in enumerate(blocks):
            for trial_idx, trial in enumerate(trials):
                for palette_idx, palette in enumerate(trial["palettes"]):
                    has_target = trial["target_color_rgb255"] in palette
                    for hole_idx, color in enumerate(palette):
                        rows.append({
                            "seed":                   b,
                            "block":                  b,
                            "trial_idx":              trial_idx,
                            "mvc_base":               None,
                            "mvc_post":               None,
                            "physical_demand_level":  trial["physical_demand_level"],
                            "cognitive_demand_level": trial["cognitive_demand_level"],
                            "target_color_rgb255":    trial["target_color_rgb255"],
                            "num_palettes":           trial["num_palettes"],
                            "palette_idx":            palette_idx,
                            "is_target_palette":      has_target,
                            "hole_idx":               hole_idx,
                            "hole_color_rgb255":      color,
                            "is_target_hole":         color == trial["target_color_rgb255"],
                            # Placeholders for data
                            "is_selected":              None,
                            "selected_rt":              None,
                            "is_hit":                   None,
                            "is_false_alarm":           None,
                            "is_miss":                  None,
                            "is_correct_rejection":     None,
                            "hits":                     None,
                            "false_alarms":             None,
                            "misses":                   None,
                            "correct_rejections":       None,
                            "d_prime":                  None,
                            "NRMSE":                    None,
                            "sBias":                    None,
                            "pTWTR":                    None,
                            "rpe_cognitive":            None,
                            "rpe_physical":             None,
                            "rpe_time":                 None,
                            "rpe_boredom":              None
                        })

        # Create an index for fast lookup
        row_index = {}
        palette_row_index = {}
        for i, row in enumerate(rows):
            hole_key = (row["block"], row["trial_idx"], row["palette_idx"], row["hole_idx"])
            row_index[hole_key] = i
            palette_key = (row["block"], row["trial_idx"], row["palette_idx"])
            if palette_key not in palette_row_index:
                palette_row_index[palette_key] = []
            palette_row_index[palette_key].append(i)

        # Save seed
        for row in rows:
            row["seed"] = GLOBAL_SEED

        pd.DataFrame(rows).to_csv(thisExp.dataFileName + '_data.csv', index=False)

        # Define some labels for later display
        phase_labels = {
            'practice_neutral':  'Practice - Neutral',
            'practice_physical': 'Practice - Physical',
            'practice_cognitive':'Practice - Cognitive',
            'main':              'Main',
        }
    CodeComponent setup_ring
      Code Type = Auto->JS
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      Begin Experiment:
        # Main ring parameters
        ring_radius = 0.075  # distance of small circles from center
        hole_radius = 0.02   # size of each small circle

        # Create the 8 hole stimuli
        hole_stimuli = []
        ring_center = (0.5, 0.0)
        for i in range(NUM_DISTRACTORS):
            angle = np.pi - 2 * np.pi * i / NUM_DISTRACTORS
            x = ring_center[0] + ring_radius * np.cos(angle)
            y = ring_center[1] + ring_radius * np.sin(angle)
            circle = visual.Circle(
                win,
                radius=hole_radius,
                pos=(x, y),
                fillColor=[128, 128, 128],
                colorSpace='rgb255',
                lineColor=None,
                autoLog=False
            )
            hole_stimuli.append(circle)

        # Create the labels
        hole_labels = []
        for i in range(NUM_DISTRACTORS):
            angle = np.pi - 2 * np.pi * i / NUM_DISTRACTORS
            x = ring_center[0] + ring_radius * np.cos(angle)
            y = ring_center[1] + ring_radius * np.sin(angle)
            label = visual.TextStim(
                win,
                text=str(i),
                pos=(x, y),
                height=0.02,
                color='white',
                bold=True,
                autoLog=False
            )
            hole_labels.append(label)
  Routine rr_maxforce
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    CodeComponent maxforce_code
      Code Type = Py
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      Begin Routine:
        # Initialize current value of MVC
        cur_mvc = maxforce_force.whiteForce = 0

        # Improve display appearance
        maxforce_display.alignText = "left"
        maxforce_display.bold = True

        # Get current state
        cur_maxforce_type        = maxforce_type[oo_mvc_type.thisN]
        cur_maxforce_repetitions = maxforce_repetitions[oo_mvc_type.thisN]
        cur_maxforce_duration    = maxforce_duration[oo_mvc_type.thisN]
      Each Frame:
        # Update current MVC value based on dynamometer measurement
        cur_mvc = max(cur_mvc, maxforce_force.whiteForce)

        # Update MVC only if we are in a calibration trial
        if cur_maxforce_type == "Calibration":
            mvc = max(mvc, cur_mvc)

        # Display text
        maxforce_display_text = (
            f"============ TRIAL INFO ============\n"
            f"Trial Type:        {cur_maxforce_type} ({oo_mvc_rep.thisN+1}/{cur_maxforce_repetitions})\n"
            f"Current Force:     {maxforce_force.whiteForce:.2f} N\n"
            f"MVC (cur / max):   {cur_mvc:.2f} / {mvc:.2f} N\n"
            f"====================================\n"
        )
    ApparatusLEDComponent maxforce_lights plugin="psychopy-apparatus"
      deviceLabel = apparatus
      lightColors = white
      lightHoles = "all"
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    ApparatusForceComponent maxforce_force plugin="psychopy-apparatus"
      device = white
      deviceLabel = apparatus
      dynamometer = both
      endRoutineOnResponse = False
      rate = 60
      rawDataId = "calibration"
      saveRawData = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
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    TextComponent maxforce_display
      font = Courier New
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = $maxforce_display_text
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  Routine rr_target
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    CodeComponent target_code
      Code Type = Py
      Begin Routine:
        # ===== CONDITION SETUP =====

        # Get data for current block and trial
        cur_block_trials = blocks[oo_block.thisN]
        cur_trial = cur_block_trials[oo_level.thisN]
        cur_total_blocks = len(blocks)
        cur_trials_in_block = len(cur_block_trials)

        cur_num_palettes = cur_trial['num_palettes']
        cur_physical_demand_level = cur_trial['physical_demand_level']
        cur_cognitive_demand_level = cur_trial['cognitive_demand_level']
        cur_target_color_rgb255 = cur_trial['target_color_rgb255']
        cur_phase = cur_trial.get('phase', 'main')

        # ===== PERFORMANCE SETUP =====

        # Reset hits/misses/fa/cr for dprime calculation later in slider Routine
        hits = misses = false_alarms = correct_rejections = 0

        # =============================================================================
        # AUDIO - BEGIN ROUTINE
        # =============================================================================
        mute_audio()  # Start routine silent
        proposed = 0  # Start routine within force tolerance
        _last_beep_t = 0

        force_nrmse_buffer = []
        target_pmvc = cur_physical_demand_level * mvc
        lower_threshold = max(target_pmvc * (1.0 - FORCE_TOLERANCE_K), 0.0)
        upper_threshold = target_pmvc * (1.0 + FORCE_TOLERANCE_K)

        toneState    = 0
        _lastSwitchT = -1e9


        # ===== DISPLAY SETUP =====
        target_display_text = "Waiting for force signal..."
        target_display.alignText = "left"
        target_display.bold = True
        cur_target_color_name = COLOR_NAMES.get(tuple(cur_target_color_rgb255), "Unknown")

        # Color the display circle
        for i, circle in enumerate(hole_stimuli):
            circle.fillColor = cur_target_color_rgb255

        # ===== INITIALIZE FORCE METRICS =====
        FORCE_TOLERANCE_BUFFER.clear()
        force_nrmse_buffer = []
      Each Frame:
        # =============================================================================
        # AUDIO - EACH FRAME
        # =============================================================================
        if target_force.whiteForce is not None:
            cur_force = max(target_force.whiteForce, 0)

            # Populate the force buffer for smooth feedback
            FORCE_TOLERANCE_BUFFER.append(cur_force)
            smooth_force = statistics.median(FORCE_TOLERANCE_BUFFER)

            # Collect force value for deviation
            force_nrmse_buffer.append(smooth_force)
            nrmse = force_nrmse(force_nrmse_buffer, target_pmvc)
            sbias = force_bias(force_nrmse_buffer, target_pmvc)
            # ptwtr = force_pct_in_range(force_nrmse_buffer, target_pmvc)
            ptwtr = force_pct_in_range(force_nrmse_buffer, target_pmvc)

            if len(FORCE_TOLERANCE_BUFFER) >= FORCE_BUFFER_LENGTH:
                if smooth_force > upper_threshold:
                    proposed = 2
                    deviation = smooth_force - upper_threshold
                elif smooth_force < lower_threshold:
                    proposed = 1
                    deviation = lower_threshold - smooth_force
                else:
                    proposed = 0
                    deviation = 0

            if proposed != toneState and (t - _lastSwitchT) >= STATE_HOLD:
                toneState    = proposed
                _lastSwitchT = t
                if toneState == 2:
                    freq, amp = FREQ_HIGH, AMP_MAX
                elif toneState == 1:
                    freq, amp = FREQ_LOW, AMP_MAX
                else:
                    freq, amp = FREQ_LOW, 0.0
                with _state_lock:
                    _target_freq = freq
                    _target_amp  = amp
        else:
            mute_audio()
            print("Force is None!")

        # Create the target display text
        if smooth_force > upper_threshold:
            deviation_symbol = "\u2191\u2191\u2191"  # ↑
        elif smooth_force < lower_threshold:
            deviation_symbol = "\u2193\u2193\u2193"  # ↓
        else:
            deviation_symbol = "\u2013\u2013\u2013"  # – (on target)

        target_display_text = (
            f"============ TRIAL INFO ================\n"
            f"PHASE: {phase_labels.get(cur_phase, cur_phase)}\n"
            f"BLOCK {oo_block.thisN+1:2}/{cur_total_blocks} | TRIAL {oo_level.thisN+1:2}/{cur_trials_in_block}\n"
            f"----------------------------------------\n"
            f"Target Color:      {cur_target_color_name}\n"
            f"Physical demand:   {cur_physical_demand_level*100:.0f}% MVC\n"
            f"Cognitive demand:  {cur_cognitive_demand_level:.0f} dE\n"
            f"----------------------------------------\n"
            f"MVC:               {mvc:03.0f} N\n"
            f"Target:            {lower_threshold:03.0f} N | {target_pmvc:03.0f} N | {upper_threshold:03.0f} N\n"
            f"Force:                     {smooth_force:03.0f} N\n"
            f"Cur. Deviation:            {deviation_symbol}\n"
            f"NRMSE:             {nrmse:6.0f}\n"
            f"Bias:              {sbias:+6.0f}\n"
            f"pTWTR:             {ptwtr:6.0f}\n"
            f"========================================\n"
        )

        # Display monitoring circle
        for circle, label in zip(hole_stimuli, hole_labels):
            circle.draw()
            label.draw()
      End Routine:
        force_nrmse_buffer = []
    ApparatusLEDComponent target_lights plugin="psychopy-apparatus"
      holes = 'none'
      lightColors [set every repeat] = $cur_target_color_rgb255
      lightHoles = "inner"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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    ApparatusForceComponent target_force plugin="psychopy-apparatus"
      device = white
      dynamometer = both
      endRoutineOnResponse = False
      rate = 50
      rawDataId = "target presentation"
      saveRawData = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
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    TextComponent target_display
      font = Courier New
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text [set every frame] = $target_display_text
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  Routine rr_trial
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    CodeComponent trial_color_code
      Code Type = Py
      Begin Routine:
        # ===== CONDITION SETUP =====
        cur_trial = blocks[oo_block.thisN][oo_level.thisN]

        cur_palette             = cur_trial['palettes'][oo_palette.thisN]
        cur_palette_has_target  = cur_trial['palette_has_target'][oo_palette.thisN]
        cur_palette_target_hole = cur_trial['palette_target_hole'][oo_palette.thisN]

        prev_reed_holes = None
        prev_reed_actions = None


        # =============================================================================
        # AUDIO - BEGIN ROUTINE
        # =============================================================================
        target_pmvc = cur_physical_demand_level * mvc
        lower_threshold = max(target_pmvc * (1.0 - FORCE_TOLERANCE_K), 0.0)
        upper_threshold = target_pmvc * (1.0 + FORCE_TOLERANCE_K)

        toneState    = 0
        _lastSwitchT = -1e9

        # ===== DISPLAY SETUP =====

        trial_display.alignText = "left"
        trial_display.bold = True

        # Color the display circle
        for i, circle in enumerate(hole_stimuli):
            circle.fillColor = cur_palette[i]
      Each Frame:
        # =============================================================================
        # AUDIO - EACH FRAME
        # =============================================================================
        if trial_force.whiteForce is not None:
            cur_force = max(trial_force.whiteForce, 0)

            # Populate the force buffer for smooth feedback
            FORCE_TOLERANCE_BUFFER.append(cur_force)
            smooth_force = statistics.median(FORCE_TOLERANCE_BUFFER)

            # Collect force value for deviation
            force_nrmse_buffer.append(smooth_force)
            nrmse = force_nrmse(force_nrmse_buffer, target_pmvc)
            sbias = force_bias(force_nrmse_buffer, target_pmvc)
            # ptwtr = force_pct_in_range(force_nrmse_buffer, target_pmvc)
            ptwtr = force_pct_in_range(force_nrmse_buffer, target_pmvc)

            if len(FORCE_TOLERANCE_BUFFER) >= FORCE_BUFFER_LENGTH:
                if smooth_force > upper_threshold:
                    proposed = 2
                elif smooth_force < lower_threshold:
                    proposed = 1
                else:
                    proposed = 0

            if proposed != toneState and (t - _lastSwitchT) >= STATE_HOLD:
                toneState    = proposed
                _lastSwitchT = t
                if toneState == 2:
                    freq, amp = FREQ_HIGH, AMP_MAX
                elif toneState == 1:
                    freq, amp = FREQ_LOW, AMP_MAX
                else:
                    freq, amp = FREQ_LOW, 0.0
                with _state_lock:
                    _target_freq = freq
                    _target_amp  = amp
        else:
            mute_audio()
            print("Force is None!")

        # ===== DISPLAY SETUP =====
        if smooth_force > upper_threshold:
            deviation_symbol = "\u2191\u2191\u2191"  # ↑
        elif smooth_force < lower_threshold:
            deviation_symbol = "\u2193\u2193\u2193"  # ↓
        else:
            deviation_symbol = "\u2013\u2013\u2013"  # – (on target)

        trial_display_text = (
            f"============ TRIAL INFO ================\n"
            f"PHASE: {phase_labels.get(cur_phase, cur_phase)}\n"
            f"BLOCK {oo_block.thisN+1:2}/{cur_total_blocks} | TRIAL {oo_level.thisN+1:2}/{cur_trials_in_block} | PALETTE {oo_palette.thisN+1:2}/{cur_num_palettes}\n"
            f"----------------------------------------\n"
            f"Target Color:      {cur_target_color_name}\n"
            f"Physical demand:   {cur_physical_demand_level*100:.0f}% MVC\n"
            f"Cognitive demand:  {cur_cognitive_demand_level:.0f} dE\n"
            f"----------------------------------------\n"
            f"MVC:               {mvc:03.0f} N\n"
            f"Target:            {lower_threshold:03.0f} N | {target_pmvc:03.0f} N | {upper_threshold:03.0f} N\n"
            f"Force:                     {smooth_force:03.0f} N\n"
            f"Cur. Deviation:            {deviation_symbol}\n"
            f"NRMSE:             {nrmse:6.0f}\n"
            f"Bias:              {sbias:+6.0f}\n"
            f"pTWTR:             {ptwtr:6.0f}\n"
            f"========================================\n"
        )

        for circle, label in zip(hole_stimuli, hole_labels):
            circle.draw()
            label.draw()

        # Highlights reed contacts
        last_selected = trial_reed.reedHoles[-1] if trial_reed.reedHoles else None

        for i, (circle, label) in enumerate(zip(hole_stimuli, hole_labels)):
            # target highlight
            if cur_palette_has_target and i == cur_palette_target_hole:
                circle.lineColor = 'yellow'
                circle.lineWidth = 3
            # last selected highlight
            elif i == last_selected:
                circle.lineColor = 'white'
                circle.lineWidth = 3
            else:
                circle.lineColor = None
            circle.draw()
            label.draw()
      End Routine:
        # Mute audio
        # mute_audio()

        # Determine d-prime metrics
        is_hit               = int(cur_palette_has_target and cur_palette_target_hole in trial_reed.reedHoles)
        is_false_alarm       = int(not cur_palette_has_target and len(trial_reed.reedHoles) > 0)
        is_miss              = int(cur_palette_has_target and cur_palette_target_hole not in trial_reed.reedHoles)
        is_correct_rejection = int(not cur_palette_has_target and len(trial_reed.reedHoles) == 0)

        # Accumulate d-prime metrics
        hits               += is_hit
        false_alarms       += is_false_alarm
        misses             += is_miss
        correct_rejections += is_correct_rejection

        # Get the first insertion event (action == 1) across all reed events
        first_insert_idx = next((h for h, a in zip(trial_reed.reedHoles, trial_reed.reedActions) if a == 1), None)
        first_insert_rt  = next((t for t, a in zip(trial_reed.reedTimesRelative, trial_reed.reedActions) if a == 1), None)

        # Write hole-level data: mark which hole was first selected and its RT
        for hole_idx in range(NUM_DISTRACTORS):
            i = row_index[(oo_block.thisN, oo_level.thisN, oo_palette.thisN, hole_idx)]
            rows[i]["is_selected"] = int(hole_idx == first_insert_idx)
            rows[i]["selected_rt"] = first_insert_rt if hole_idx == first_insert_idx else None

        # Write palette-level data
        for i in palette_row_index[(oo_block.thisN, oo_level.thisN, oo_palette.thisN)]:
            rows[i]["is_hit"]               = is_hit
            rows[i]["is_false_alarm"]       = is_false_alarm
            rows[i]["is_miss"]              = is_miss
            rows[i]["is_correct_rejection"] = is_correct_rejection
    ApparatusLEDComponent trial_lights plugin="psychopy-apparatus"
      holeColor = black
      holes = 'none'
      lightColors [set every repeat] = $cur_palette
      lightHoles = "inner"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PALETTE_DURATION_SEC
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = True
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    ApparatusReedComponent trial_reed plugin="psychopy-apparatus"
      deviceLabel = apparatus
      endRoutineOnResponse = False
      holes = 'all'
      rate = 100
      reedHoles [set every repeat] = "inner"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PALETTE_DURATION_SEC + 1
      syncScreenRefresh = False
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    ApparatusForceComponent trial_force plugin="psychopy-apparatus"
      device = white
      dynamometer = both
      endRoutineOnResponse = False
      rate = 50
      rawDataId = "trial"
      saveRawData = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PALETTE_DURATION_SEC + 1
      syncScreenRefresh = False
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    TextComponent trial_display
      font = Courier New
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = PALETTE_DURATION_SEC + 1
      text [set every frame] = $trial_display_text
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  Routine rr_countdown
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    CodeComponent countdown_code
      Code Type = Py
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      Begin Routine:
        # Countdown setup
        cur_countdown_idx = len(INNER_HOLES)
        cur_countdown_last_update_sec = None

        # DEBUG
        countdown_lights.turnOffLights("all")
      Each Frame:
        # Check if it's time to update the countdown
        if cur_countdown_last_update_sec is None:
            cur_countdown_last_update_sec = t  # t is the routine timer

        if t - cur_countdown_last_update_sec >= COUNTDOWN_STEP_SEC:
            if cur_countdown_idx >= 0:
                # Turn off the current light
                countdown_lights.turnOffLights(cur_countdown_idx)
            else:
                continueRoutine = False

            # Decrease the number of active lights
            cur_countdown_idx -= 1
            cur_countdown_last_update_sec = t
    ApparatusLEDComponent countdown_lights plugin="psychopy-apparatus"
      deviceLabel = apparatus
      durationEstim = 4
      holeColor = black
      holes = 'none'
      lightColors [set every repeat] = white
      lightHoles [set every repeat] = "inner"
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = False
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    TextComponent countdown_display
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every frame] = $cur_countdown_idx + 1
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  Routine rr_domain
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    CodeComponent domain_code
      Code Type = Py
      Begin Routine:
        # Define shared resources outside the condition
        #def build_level_color_map(levels, num_blocks, colors):
        #    order_per_block = {}
        #    for block in range(num_blocks):
        #        lvls = levels.copy()
        #        random.shuffle(lvls)
        #        order_per_block[block] = lvls

        #    color_map = {}
        #    for lvl in levels:
        #        shuffled = random.sample(colors, num_blocks)
        #        color_map[lvl] = {block: shuffled[block] for block in range(NUM_BLOCKS)}

        #    return order_per_block, color_map

        #def print_design_check(label, order_per_block, color_map):
        #    print(f"\n===== {label} DESIGN CHECK =====")
        #    for block, levels in order_per_block.items():
        #        print(f"\nBlock {block + 1} order:")
        #        for lvl in levels:
        #            print(f"  Level {lvl:.3f} -> Color {color_map[lvl][block]}")
        #    print("=" * 34 + "\n")

        #if domain == 'cognitive':
        #    levels = np.linspace(DELTA_E_MIN, DELTA_E_MAX, NUM_LEVELS).tolist()
        #    order_per_block, color_map = build_level_color_map(levels, NUM_BLOCKS, TARGET_COLORS)
        #    print_design_check("DELTA E", order_per_block, color_map)
            # deltaE_order_per_block = order_per_block
            # deltaE_color_map = color_map
        #    deltaE = DELTA_E_PHYSICAL
        #if domain == 'physical':
        #    levels = np.linspace(PERCENT_MVC_MIN, PERCENT_MVC_MAX, NUM_LEVELS).tolist()
        #    order_per_block, color_map = build_level_color_map(levels, NUM_BLOCKS, TARGET_COLORS)
        #    print_design_check("MVC", order_per_block, color_map)
            # mvc_order_per_block = order_per_block
            # mvc_color_map = color_map
            # mvc_level = PERCENT_MVC_COGNITIVE
  Routine rr_mvc
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    CodeComponent mvc_code
      Code Type = Py
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      Begin Experiment:
        # Define button for exercise stop
        mvc_stop_practice_text = "ÜBUNGSPHASE BEENDEN\n\n=> Kalibrierung startet"
      Begin Routine:
        # Improve display appearance
        mvc_display.alignText = "left"
        mvc_display.bold = True
      Each Frame:
        # Measure time
        remaining = max(0, cur_maxforce_duration - t)
        if remaining <= 0:
            continueRoutine = False

        # Update button label
        mvc_continue_label = (
            f'WEITER IN {int(remaining)}s\n'
            + f'\n'
            + f'oder hier Klicken'
        )
      End Routine:
        # Save MVC value
        for row in rows:
            row[mvc_phase] = mvc
    TextComponent mvc_display
      color = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every frame] = $maxforce_display_text
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    ButtonComponent mvc_continue
      bold = True
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0.3, -0.3)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text [set every frame] = $mvc_continue_label
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    ButtonComponent mvc_stop_practice
      bold = True
      callback = oo_mvc_rep.finished = True
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (-0.3, -0.3)
      size = (0.4, 0.1)
      startVal [condition] = cur_maxforce_type == "Practice"
      text [set every repeat] = $mvc_stop_practice_text
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  Routine rr_rating
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    CodeComponent rating_code
      Code Type = Py
      Begin Routine:
        # Mute audio if still running
        mute_audio()

        # dprime Calculation
        N_signal = hits + misses
        N_noise = false_alarms + correct_rejections

        hit_rate = (hits + 0.5)/(N_signal + 1)
        fa_rate = (false_alarms + 0.5)/(N_noise + 1)

        d_prime = norm.ppf(hit_rate) - norm.ppf(fa_rate)

        #H = hits + misses
        #F = false_alarms + correct_rejections

        #hit_rate = (hits+0.5)/(H+1) if H>0 else 0.5
        #fa_rate = (false_alarms+0.5)/(F+1) if F>0 else 0.5
        #d_prime = norm.ppf(hit_rate) - norm.ppf(fa_rate)

        currentLoop.addData('d_prime', d_prime)

        # Write trial-level data
        for palette_idx in range(cur_num_palettes):
            for i in palette_row_index[(oo_block.thisN, oo_level.thisN, palette_idx)]:
                rows[i]["hits"]               = hits
                rows[i]["false_alarms"]       = false_alarms
                rows[i]["misses"]             = misses
                rows[i]["correct_rejections"] = correct_rejections
                rows[i]["d_prime"]            = d_prime
                rows[i]["NRMSE"]              = nrmse
                rows[i]["sBias"]              = sbias
                rows[i]["pTWTR"]              = ptwtr

        # ===== DISPLAY SETUP =====
        # rating_dprime_text.alignText = "left"
        rating_dprime_text.bold = True
        rating_physical_text.bold = True
        rating_cognitive_text.bold = True
        rating_time_text.bold = True
        rating_boredom_text.bold = True

        feedback_display_text = (
            f"==== PERFORMANCE ====\n"
            f"d-prime:       {d_prime:+5.2f}\n"
            f"Hits:          {hits:5}\n"
            f"Misses:        {misses:5}\n"
            f"False Alarms:  {false_alarms:5}\n"
            f"Correct Rej.:  {correct_rejections:5}\n"
            f"---------------------\n"
            f"NRMSE:         {nrmse:5.0f}\n"
            f"Bias:          {sbias:+5.0f}\n"
            f"pTWR:          {ptwtr:5.0f}\n"
            f"====================="
            + (f"\n⚠ WARNING: pTWR below 50!" if ptwtr < 50 else "")
        )

        # ===== DATA DUMPING =====
        pd.DataFrame(rows).to_csv(thisExp.dataFileName + '_data.csv', index=False)
      Each Frame:
        # Check whether experimenter has entered both ratings
        is_ratings_complete = (
            rating_physical.getRating() is not None and
            rating_cognitive.getRating() is not None and
            rating_time.getRating() is not None and
            rating_boredom.getRating() is not None
        )
      End Routine:
        # Write trial-level data
        for palette_idx in range(cur_num_palettes):
            for i in palette_row_index[(oo_block.thisN, oo_level.thisN, palette_idx)]:
                    rows[i]["rpe_cognitive"] = rating_cognitive.getRating()
                    rows[i]["rpe_physical"]  = rating_physical.getRating()
                    rows[i]["rpe_time"]      = rating_time.getRating()
                    rows[i]["rpe_boredom"]   = rating_boredom.getRating()
    TextComponent rating_dprime_text
      font = Courier New
      letterHeight = 0.035
      pos = (-0.4, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $feedback_display_text
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    TextComponent rating_cognitive_text
      color = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      letterHeight = 0.035
      pos = (0.3, 0.4)
      startVal [time (s)] = 0.0
      text = Kognitive Anstrengung
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    SliderComponent rating_cognitive
      borderColor = $(-1.0000, -0.2157, -1.0000)
      color = $(-1.0000, -0.2157, -1.0000)
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0,1,2,3,4,5,6,7,8,9,10)
      letterHeight = 0.025
      pos = (0.3, 0.33)
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styleTweaks = ['triangleMarker']
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextComponent rating_physical_text
      color = $(0.0902, -1.0000, -1.0000)
      font = Courier New
      letterHeight = 0.035
      pos = (0.3, 0.2)
      startVal [time (s)] = 0.0
      text = Körperliche Anstrengung
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    SliderComponent rating_physical
      borderColor = $(0.0902, -1.0000, -1.0000)
      color = $(0.0902, -1.0000, -1.0000)
      fillColor = $(0.0902, -1.0000, -1.0000)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0,1,2,3,4,5,6,7,8,9,10)
      letterHeight = 0.025
      pos = (0.3, 0.13)
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styleTweaks = ['triangleMarker']
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextComponent rating_boredom_text
      color = $(0.1608, -1.0000, 0.6549)
      font = Courier New
      letterHeight = 0.035
      pos = (0.3, 0.0)
      startVal [time (s)] = 0.0
      text = Langeweile
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    SliderComponent rating_boredom
      borderColor = $(0.1608, -1.0000, 0.6549)
      color = $(0.1608, -1.0000, 0.6549)
      fillColor = $(0.1608, -1.0000, 0.6549)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0,1,2,3,4,5,6,7,8,9,10)
      letterHeight = 0.025
      pos = (0.3, -0.07)
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styleTweaks = ['triangleMarker']
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextComponent rating_time_text
      color = $(1.0000, 0.0980, -1.0000)
      font = Courier New
      letterHeight = 0.035
      pos = (0.3, -0.2)
      startVal [time (s)] = 0.0
      text = Zeitwahrnehmung
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    SliderComponent rating_time
      borderColor = $(1.0000, 0.0980, -1.0000)
      color = $(1.0000, 0.0980, -1.0000)
      fillColor = $(1.0000, 0.0980, -1.0000)
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ("",1,2,3,4,5,6,7,8,9,10)
      letterHeight = 0.025
      pos = (0.3, -0.27)
      size = (0.75, 0.075)
      startVal [time (s)] = 0.0
      styleTweaks = ['triangleMarker']
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    ButtonComponent rating_continue_button
      bold = True
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (-0.4, -0.2)
      size = (0.25, 0.1)
      startVal [condition] = is_ratings_complete or speedrun
      text = WEITER
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  Routine rr_start_mvc
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    CodeComponent start_mvc_code
      Code Type = Py
      Begin Experiment:
        # Define button for exercise stop
        start_mvc_button_text = "Start"
      Begin Routine:
        # Initialize value for maximum voluntary contraction (MVC)
        mvc = 0
    TextComponent start_mvc_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Maximalkraftmessung
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    ButtonComponent start_mvc_button
      bold = True
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.2)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $start_mvc_button_text
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  Routine rr_start_block
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    CodeComponent start_block_code
      Code Type = Py
      Begin Routine:
        # Define button for block start
        cur_phase = blocks[oo_block.thisN][0].get('phase', 'main')
        start_block_button_text = f"{phase_labels.get(cur_phase, cur_phase)}"
      Each Frame:
        # Measure time
        remaining = max(0, BLOCK_BREAK_DURATION - t)
        if remaining <= 0:
            continueRoutine = False

        # Update button label
        start_block_label = (
            f'BLOCK STARTEN IN {int(remaining)}s\n'
            + f'\n'
            + f'oder hier Klicken'
        )
    TextComponent start_block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_block_button_text
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    ButtonComponent start_block_button
      bold = True
      fillColor = $(-1.0000, -0.2157, -1.0000)
      font = Courier New
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.2)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text [set every frame] = $start_block_label
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  Routine rr_block
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    CodeComponent block_code
      Code Type = Py
      Begin Routine:
        is_mvc = int(oo_block.thisN == 0 or oo_block.thisN == len(blocks))
        is_block = int(oo_block.thisN < len(blocks))
        mvc_phase = 'mvc_base' if oo_block.thisN == 0 else 'mvc_post'

        if oo_block.thisN == 0:
            maxforce_type = ["Practice", "Calibration"]
            maxforce_repetitions = [999, NUM_MVC]
            maxforce_duration = [999, 45]
        else:
            maxforce_type = ["Calibration"]
            maxforce_repetitions = [NUM_MVC]
            maxforce_duration = [45]
  Routine rr_finish
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    TextComponent finish_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Das Experiment ist beendet.

        Dieses Fenster schließt sich in wenigen Sekunden.
Flow
  Routine rr_setup
  LoopInitiator oo_block loopType="TrialHandler"
    loopType = random
    nReps = len(blocks) + 1
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    Routine rr_block
    LoopInitiator yn_mvc loopType="TrialHandler"
      loopType = random
      nReps = is_mvc
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      Routine rr_start_mvc
      LoopInitiator oo_mvc_type loopType="TrialHandler"
        loopType = sequential
        nReps = len(maxforce_type)
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        conditions:
          [{'maxforce_type': 'Practice', 'maxforce_repetitions': 999, 'maxforce_duration': 999},
          {'maxforce_type': 'Calibration', 'maxforce_repetitions': 2, 'maxforce_duration': 45}]
        LoopInitiator oo_mvc_rep loopType="TrialHandler"
          loopType = sequential
          nReps = maxforce_repetitions[oo_mvc_type.thisN]
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          conditions:
            [{'mvc_trial_nrepeat': 1, 'mvc_trial_duration': None},
            {'mvc_trial_nrepeat': 3, 'mvc_trial_duration': 45}]
          Routine rr_countdown
          Routine rr_maxforce
          Routine rr_mvc
        LoopTerminator oo_mvc_rep
      LoopTerminator oo_mvc_type
    LoopTerminator yn_mvc
    LoopInitiator yn_block loopType="TrialHandler"
      loopType = sequential
      nReps = is_block
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      Routine rr_start_block
      Routine rr_countdown
      LoopInitiator oo_level loopType="TrialHandler"
        loopType = random
        nReps = len(blocks[oo_block.thisN])
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        conditions:
          [{'cond_level_cognitive': 10, 'cond_level_physical': 0.1, 'cond_target_color_rgb255': [0, 0, 255]},
          {'cond_level_cognitive': 10, 'cond_level_physical': 0.1, 'cond_target_color_rgb255': [255, 0, 0]},
          {'cond_level_cognitive': 10, 'cond_level_physical': 0.1, 'cond_target_color_rgb255': [0, 255, 0]},
          {'cond_level_cognitive': 20, 'cond_level_physical': 0.16, 'cond_target_color_rgb255': [0, 0, 255]},
          {'cond_level_cognitive': 20, 'cond_level_physical': 0.16, 'cond_target_color_rgb255': [255, 0, 0]},
          {'cond_level_cognitive': 20, 'cond_level_physical': 0.16, 'cond_target_color_rgb255': [0, 255, 0]},
          {'cond_level_cognitive': 30, 'cond_level_physical': 0.22, 'cond_target_color_rgb255': [0, 0, 255]},
          {'cond_level_cognitive': 30, 'cond_level_physical': 0.22, 'cond_target_color_rgb255': [255, 0, 0]},
          {'cond_level_cognitive': 30, 'cond_level_physical': 0.22, 'cond_target_color_rgb255': [0, 255, 0]},
          {'cond_level_cognitive': 40, 'cond_level_physical': 0.28, 'cond_target_color_rgb255': [0, 0, 255]},
          {'cond_level_cognitive': 40, 'cond_level_physical': 0.28, 'cond_target_color_rgb255': [255, 0, 0]},
          {'cond_level_cognitive': 40, 'cond_level_physical': 0.28, 'cond_target_color_rgb255': [0, 255, 0]},
          {'cond_level_cognitive': 50, 'cond_level_physical': 0.34, 'cond_target_color_rgb255': [0, 0, 255]},
          {'cond_level_cognitive': 50, 'cond_level_physical': 0.34, 'cond_target_color_rgb255': [255, 0, 0]},
          {'cond_level_cognitive': 50, 'cond_level_physical': 0.34, 'cond_target_color_rgb255': [0, 255, 0]}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
        Routine rr_target
        LoopInitiator oo_palette loopType="TrialHandler"
          loopType = random
          nReps = cur_num_palettes
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          Routine rr_trial
        LoopTerminator oo_palette
        Routine rr_rating
      LoopTerminator oo_level
    LoopTerminator yn_block
  LoopTerminator oo_block
  Routine rr_finish
