PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = jakob_test
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      disabled = True
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    ApparatusLEDComponent apparatusLED plugin="psychopy-apparatus"
      deviceLabel = apparatus
      lightColors = red
      lightHoles = "all"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = True
      turnOffOnStop = True
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  Routine kraftmessung
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    ApparatusForceComponent apparatusForce plugin="psychopy-apparatus"
      deviceLabel = apparatus
      dynamometer = white
      rate = 100
      rawDataId = "test"
      saveRawData = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      End Experiment:
        force = []
    ApparatusLEDComponent apparatusLED_3 plugin="psychopy-apparatus"
      lightColors = red
      lightHoles = "all"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = True
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  Routine set_up
    RoutineSettingsComponent set_up
      disabled = True
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    CodeComponent setup_constants
      Code Type = Py
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      Before Experiment:
        # IMPORT MODULES ----
        import random
        import math
        import numpy as np
        import sounddevice as sd
        import threading
        import pandas as pd
        from collections import deque
        import hashlib

        # IMPORT SUBMODULES ----
        # from scipy.stats import truncnorm, nur bei truncated normal distribution
        from psychopy.colors import Color
        from scipy.stats import norm
        from itertools import product
        from openpyxl import Workbook
        from openpyxl.styles import PatternFill
        import statistics
      Begin Experiment:
        # DEFINITIONS AND CONSTANTS ----
        NUM_MVC               = 2     # How many MVC trials to conduct
        NUM_BLOCKS            = 3     # How often each block within the domain is repeated
        NUM_LEVELS            = 4     # How often each level within the block is repeated
        NUM_PALETTES_EXERCISE = 12    # for practice trials
        NUM_PALETTES_REGULAR  = 24    # for main trials
        NUM_TARGETS           = 4     # How many targets appear in NUM_PALETTES palettes
        NUM_DISTRACTORS       = 8
        NON_TARGET_PALETTES   = [2, 2] # the first and last x palettes that never contain a target

        # MIN, MAX, AND RANGE OF COGNITIVE AND PHYSICAL DEMAND
        PHYSICAL_DEMAND_MIN     = 0.03
        PHYSICAL_DEMAND_MAX     = 0.40
        COGNITIVE_DEMAND_MIN    = 70
        COGNITIVE_DEMAND_MAX    = 10
        PHYSICAL_DEMAND_LEVELS  = np.round(np.linspace(PHYSICAL_DEMAND_MIN, PHYSICAL_DEMAND_MAX, NUM_LEVELS), 2).tolist()
        COGNITIVE_DEMAND_LEVELS = np.round(np.linspace(COGNITIVE_DEMAND_MIN, COGNITIVE_DEMAND_MAX, NUM_LEVELS), 2).tolist()

        FORCE_TOLERANCE_N = 15.0
        FORCE_BUFFER_LENGTH = 10
        FORCE_TOLERANCE_BUFFER = deque(maxlen = FORCE_BUFFER_LENGTH)

        def force_nrmse(force_samples, target_force):
            """
            Normalized RMSE of force relative to target.
            Returns a percentage (e.g., 10% deviation from target).
            """
            force = np.asarray(force_samples)
            rmse  = np.sqrt(np.mean((force - target_force) ** 2))
            return round((rmse / target_force) * 100, 2)

        def force_bias(force_samples, target_force):
            """
            Mean signed deviation as a percentage of target.
            Positive = pressed too hard on average, negative = too soft.
            """
            force = np.asarray(force_samples)
            return round((np.mean(force - target_force) / target_force) * 100, 2)

        def force_pct_in_range(force_samples, target_force, tolerance = FORCE_TOLERANCE_N):
            """
            Percentage of samples within ±tolerance Newtons of target.
            """
            force = np.asarray(force_samples)
            lower = target_force - tolerance
            upper = target_force + tolerance
            return round(np.mean((force >= lower) & (force <= upper)) * 100, 2)

        # TARGET COLORS ----
        TARGET_COLORS_RGB255 = [[255, 0, 0], [0, 255, 0], [0, 0, 255]]
        COLOR_NAMES = {
            (255, 0, 0):   "Red",
            (0, 255, 0):   "Green",
            (0, 0, 255):   "Blue",
        }

        INNER_HOLES = list(range(8))
        OUTER_HOLES = list(range(9, 21))

        # TIMING CONSTANTS ----
        PALETTE_DURATION_SEC = 0.416
        COUNTDOWN_STEP_SEC = 0.5
        BLOCK_BREAK_DURATION = 4 * 60 # four minutes break per default

        # AUDIO CONSTANTS ----
        FS          = 48000
        CHANNELS    = 1
        FREQ_LOW    = 440.0
        FREQ_HIGH   = 880.0
        AMP_MAX     = 1.0
        AMP_SMOOTH  = 0.1
        STATE_HOLD  = 0.1


        # RANDOMNESS ----
        def seed_from_participant_id(pid):
            pid_text = str(pid).strip()
            if pid_text == "":
                pid_text = "EMPTY_PARTICIPANT_ID"
            digest = hashlib.sha256(pid_text.encode("utf-8")).digest()
            # use first 8 bytes, fold to uint32 for NumPy compatibility
            return int.from_bytes(digest[:8], byteorder="big", signed=False) % (2**32)

        # Global seed
        GLOBAL_SEED = seed_from_participant_id(expInfo['participant'])

        # Seed Python stdlib RNG (used by random.choice/sample/random/randint)
        random.seed(GLOBAL_SEED)

        # Seed NumPy legacy RNG (used by np.random and imported randint/shuffle/etc.)
        np.random.seed(GLOBAL_SEED)
  Routine stop
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    ApparatusLEDComponent apparatusLED_2 plugin="psychopy-apparatus"
      deviceLabel = apparatus
      lightColors = green
      lightHoles = "all"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      turnOffOnRoutineEnd = False
      turnOffOnStop = True
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Flow
  Routine set_up
  Routine trial
  Routine kraftmessung
  Routine stop
